PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '1', 'randomization': '-1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3840, 2160]
  color = $[-1,-1,-1]
  expName = maia-reinforcement-learning
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Routines
  Routine instr
    TextComponent heading
      color = yellow
      letterHeight = 0.075
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Instructions
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextComponent text_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be shown 3 pairs of abstract images.

        One pair will be associated with a chance of winning \$1, one with a chance of losing \$1, and one with a chance of looking at \$1.

        Your aim is to try and win, and avoid losing, as much money as possible.
    CodeComponent startup_code
      Code Type = Auto->JS
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      Begin Experiment:
        # The only way to win... is to play the game, actually
        cash_money = 0

        seed = int(expInfo['randomization'])

        if seed == -1:
            seed = int(expInfo['participant'])

        np.random.seed(seed)
        import random
        random.seed(seed)

        order_num = int(random.random() * 100)
        order = f"{order_num:03}"
        order_file = f"orders/session{expInfo['session']}/order{order}.csv"

        from psychopy import logging
        logging.log(level=logging.EXP, msg=(f'Order chosen: {order_num}'))
        logging.log(level=logging.EXP, msg=(f'Order loaded from file: {order_file}'))
        logging.flush()
  Routine getready
    TextComponent Ready
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = get ready
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  Routine stimuli
    ImageComponent left
      image [set every repeat] = $stim_left_name
      pos = (-0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    ImageComponent right
      image [set every repeat] = $stim_right_name
      pos = (0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    KeyboardComponent key_resp
      allowedKeys = 'left', 'right'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      store = first key
      storeCorrect = True
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  Routine stimuli_feedback
    CodeComponent code
      Code Type = Py
      Begin Routine:
        if key_resp.keys == 'left':
            circlePos = (-0.4, 0)
        elif key_resp.keys == 'right':
            circlePos = (0.4, 0)
        else:
            # Offscreen
            circlePos = (0.0, 4.0)
    ImageComponent left_feedback
      image [set every repeat] = $stim_left_name
      pos = (-0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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    ImageComponent right_feedback
      image [set every repeat] = $stim_right_name
      pos = (0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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    ImageComponent circle
      image = stimuli/circle.png
      pos [set every repeat] = $circlePos
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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  Routine fixation
    PolygonComponent iti
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine feedback
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if key_resp.corr:
            dollarOpacity = 1
            if kind == 0:
                text = "gain"
                cash_money += 1
            elif kind == 1:
                text = "lose"
                cash_money -= 1
            else:
                text = "look"
        else:
            dollarOpacity = 0
            text = "nothing"
    TextComponent feedback_text
      letterHeight = 0.2
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $text
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    ImageComponent dollar
      image = stimuli/dollar.jpg
      opacity [set every repeat] = $dollarOpacity
      pos = (0, -0.2)
      size = (0.9, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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  Routine ender
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if cash_money > 0:
            end_result = f"You won ${cash_money}!"
        else:
            end_result = ""

        from psychopy import logging
        logging.log(level=logging.WARN, msg=(f'Participant wins: ${cash_money}'))
        logging.flush()
    TextComponent end_heading
      color = yellow
      letterHeight = 0.075
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Experiment complete
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_result
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    MouseComponent mouse_end
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $order_file
    loopType = sequential
    nReps = 1
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    Routine getready
    Routine fixation
    Routine stimuli
    Routine stimuli_feedback
    Routine feedback
  LoopTerminator trials
  Routine ender
